PsychoPy2experiment version="2020.1.3"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Katılımcı Numarası (Kendi belirlediğiniz, 6 haneli bir sayı yazınız.)'], expName, expInfo['date'])
  Experiment info = {'Katılımcı Numarası (Kendi belirlediğiniz, 6 haneli bir sayı yazınız.)': '', 'Cinsiyet': '', 'Yaş': '', 'Deneyi Açtığınız Tarayıcınız': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = Soa_exp4
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        a = linspace(0,9,90)
        shuffle(a)
        counteksik = 0;



        trial_n = 0
      Begin Routine:
        pressed = False
        pressTime = float("inf")
        automatic = False

        tStart = t


        if w_sound == 1:
            automatic = True

        if counteksik is not 0 and w_sound == 0:
            automatic = True
            counteksik = counteksik - 1
      Each Frame:
        if (key_press.keys == 'space') and not pressed:
            pressed = True
            pressTime = t

        if t > tStart + 9:
            continueRoutine = False
      End Routine:
        trial_n = trial_n +1
        print(key_press.keys)
    TextComponent TrialText
      letterHeight = 0.04
      pos = (0,0.4)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = Hazır olduğunuzda istediğiniz herhangi bir an SPACE tuşuna basınız.
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    MovieComponent walking_stickman
      backend = moviepy
      durationEstim = 0.3
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $Speed
      startVal [time (s)] = 0
      stopVal [condition] = $(pressed and (t > pressTime + delay)) or (automatic and (t > tStart + a[compsound]))
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    KeyboardComponent key_press
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 3
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  Routine instruction
    TextComponent briefing
      letterHeight = 0.050
      startVal [time (s)] = 0.5
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      text:
        Merhaba!
        Bu deneyde sizden her denemede istediginiz herhangi bir an SPACE tuşuna basmanız istenmektedir.

        Tuşa basış bazı denemelerde bir sese sebep olmakta, bazılarında olmamaktadır.

        Ayrıca, bazı denemelerde bilgisayar kendiliğinden bu sesi üretmektedir.

        Devam etmek için lütfen herhangi bir tuşa basınız.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instruction3
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Önemli hatırlatma!

        Deney boyunca saymayın, ritim tutmayın
        ve zaman aralıkları ile ilgili size bilgi verebilecek herhangi bir strateji geliştirmeyin.

        Lütfen, deneye başlamak için bilgisayarınızdan ses duyabildiğinize emin olun ve bilgisayarınızın sesini 40 olarak ayarlayın.

        Herhangi bir sebeple deneyi bitirmeden çıkmanız gerekirse o zamana kadarki verilerin kaydolması için "esc" tuşuna basınız.

        Devam etmek için lütfen boşluk tuşuna basın.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_press.keys is None and automatic == True:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sese ne kadar sizin tuşa basmanızın sebep olduğunu hissettiniz?
        Aşağıda işaretleyin ve <Enter> tuşuna basınız.
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ("Hic", "Tamamen")
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    KeyboardComponent slider_ending
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sound_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        compsound = 0
      Begin Routine:
        if automatic == False  and key_press.keys is None:
            continueRoutine = False

        if compsound < 27 and automatic == True and key_press.keys == 'space':
            counteksik = counteksik +1;

        if automatic == True and key_press.keys is None:
            compsound = compsound +1
      Each Frame:
        if automatic == False  and key_press.keys is None :
            continueRoutine = False
    SoundComponent sound_1
      sound = beep.wav
      startVal [time (s)] = 0.0
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  Routine trial_beg
    TextComponent begin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        Tuşa basmaya başlayabileceğinizi belirten yazı çıkana kadar bekleyin ve sonra
        istediğiniz bir an tuşa basınız.
  Routine Blok_break
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0;
      Begin Routine:
        count = count +1;
        if count == 2:
            continueRoutine = False
    TextComponent Break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1. blok bitti. Isterseniz biraz dinlenin.

        2. bloğa devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent break_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Deney bitti. Katılımınız için teşekkürler!
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  Routine instruction1b
    TextComponent instruction_b
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Her denemede ekranda yürüyen bir çöp adam belirecek.
        Bunun sesin oluşmasıyla herhangi bir sebepsel ilişkisi yoktur.

        Çöp adam ekranda olduğu sürece ona bakmanız gerekmektedir.

        Devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        if consent_resp.keys == 'h' :
            core.quit()
    TextComponent consent_form
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent consent_resp
      allowedKeys = 'e','h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent
    TextComponent Consent_form
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        AYDINLATILMIŞ ONAM FORMU

        Koç Üniversitesi Psikoloji Bölümü öğretim üyesi Prof. Dr. Fuat Balcı yönetiminde yüksek lisans
        öğrencisi Merve Erdoğan tarafından aksiyon alma hissi konusunda yürütülen araştırmaya katılımınız rica olunmaktadır. Bu çalışmada katılımınız tamamen gönüllülük esasına dayanır.

        ÇALIŞMANIN ADI: Aksiyon Alma Hissinde Zaman Etkisi

        ÇALIŞMANIN AMACI
        Koç Üniversitesi tarafından yürütülen bu çalışmanın amacı, aksiyon alma hissini kontrol
        eden bilişsel mekanizmayı araştırmaktır.

        PROSEDÜRLER
        Bu çalışmaya gönüllü katılmak istemeniz halinde yürütülecek çalışmalar şöyledir;
        Yaklaşık yarım saatlik bilgisayar üzerinde yapılacak olan bir davranış deneyine katılmanız
        beklenmektedir. Bu çalışmada sizden bir tuşa basmanız ve sonrasında oluşan sese sizin sebep olup olmadığınızı değerlendirmeniz istenmektedir.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent Consent_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent2
    TextComponent Consent_text2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        OLASI RİSKLER VE RAHATSIZLIKLAR
        Deneyin risk ya da rahatsızlığı yoktur.

        TOPLUMA VE/VEYA DENEKLERE OLASI FAYDALARI
        Bu çalışmanın amacı aksiyon alma hissini kontrol eden bilişsel mekanizmayı ve etkileyen faktörleri
        araştırmaktır. Çalışmanın sonuçları, bu mekanizma hakkında topluma bilgi sağlayacaktır.

        GİZLİLİK
        Bu çalışmayla bağlantılı olarak elde edilen ve sizinle özdeşleşmiş her bilgi gizli kalacak, kişilerle
        paylaşılmayacak ve yalnızca sizin izniniz veya kanunun gerektirdiği ölçüde ifşa edilecektir. Gizlilik
        tanımlanmış bir kodlama prosedürüyle sağlanacak ve kod çözümüne erişim yalnızca çalışmanın
        sorumlusu araştırmacıyla sınırlı kalacaktır. Tüm veriler, sınırlı erişime sahip güvenli ve şifreli bir
        veri tabanında tutulacaktır.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent Consent_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent3
    TextComponent Consent_text3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        KATILIM VE AYRILMA
        Bu çalışmanın içinde olmak isteyip istemediğinize tamamı ile bağımsız ve etki altında kalmadan
        karar verebilirsiniz. Bu çalışmaya gönüllü olarak katılmaya karar vermeniz halinde dahi, sahip
        olduğunuz herhangi bir hakkı kaybetmeden veya herhangi bir cezaya maruz kalmadan istediğiniz
        zaman çekilebilirsiniz. Çalışmadan çekilmek isterseniz bir cezası yoktur ve sahip olduğunuz
        faydaları kaybetmezsiniz.

        ARAŞTIRMACILARIN KİMLİĞİ
        Bu araştırma ile ilgili herhangi bir sorunuz veya endişeniz varsa, lütfen iletişime geçiniz:
        Prof. Dr. Fuat Balcı
        Koç Üniversitesi
        T: 0212 338 1138
        E: fbalci@ku.edu.tr
        Merve Erdoğan
        Koç Üniversitesi
        E: merdogan19@ku.edu.tr

        Yukarıda açıklanan prosedürleri anladım. Sorularım tatmin olacağım şekilde yanıtlandı ve dilediğim
        zaman ayrılma hakkım saklı kalmak koşulu ile bu çalışmaya katılmayı onaylıyorum diyorsanız ‘e’ tuşuna, deneyden çekilmek için ‘h’ tuşuna basınız.
    KeyboardComponent Consent_resp3
      allowedKeys = 'e','h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent briefing2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ekranda beliren çöp adam farklı hızlarda yürüyebilmektedir.

        Sizden istenen çöp adamın o denemedeki yürüyüş hızını bir önceki ya da iki önceki denemedeki yürüyüş hızı ile kıyaslamanız
        ve ayrıca oluşan sese ne kadar sizin sebep olduğunuzu hissettiğinizi değerlendirmektir.

        Her denemede çöp adamın yürüme hızını kıyaslamanız için bir önceki çöp adam da iki önceki çöp adam da sorulacak olabilir.
        Hangisi ile kıyaslayacağınızı soru gelene kadar bilmiyor olacaksınız.

        Devam etmek için lütfen herhangi bir tuşa basınız.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_text
    TextComponent prac_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Şimdi çöp adamın yürüme hızını kıyaslamak için birkaç deneme yapacağız.

        Hazır olduğunuzda denemeyi başlatmak için herhangi bir tuşa basınız.
    KeyboardComponent practice_beg_keys
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_beg
    TextComponent practice_begin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        Tuşa basmaya başlayabileceğinizi belirten yazı çıkana kadar bekleyin ve sonra
        istediğiniz bir an tuşa basınız.
  Routine practice
  Routine practice_outcome
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if practice_resp.keys is None:
            continueRoutine = False
    SoundComponent practice_sound
      sound = beep.wav
      startVal [time (s)] = 0.0
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  Routine practice_Nback1
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if practice_n == 2:
            nback_p = 1


        if nback_p == 2 or practice_n == 1:
            continueRoutine = False
    TextComponent practice_test1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Çöp adamın yürüme hızı bir önceki denemedeki yürüme hızına göre daha hızlı ise ise "H" tuşuna,
        daha yavaş ise "Y" tuşuna, aynı ise "A" tuşuna basınız.
    KeyboardComponent practice_testResp
      allowedKeys = 'y','h','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_Nback2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        if nback_p == 1 or practice_n < 3:
            continueRoutine = False
    TextComponent practice_text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Çöp adamın yürüme hızı iki önceki denemedeki yürüme hızına göre daha hızlı ise ise "H" tuşuna,
        daha yavaş ise "Y" tuşuna, aynı ise "A" tuşuna basınız.
    KeyboardComponent practice_testResp2
      allowedKeys = 'y','h','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        practice_n = 0
      Begin Routine:
        tStart = t
      Each Frame:
        if t > tStart + 9:
            continueRoutine = False
      End Routine:
        practice_n = practice_n +1
    TextComponent practiceText
      letterHeight = 0.04
      pos = (0,0.4)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = Hazır olduğunuzda istediğiniz herhangi bir an SPACE tuşuna basınız.
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    MovieComponent practice_video
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $speed_p
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine trial_Nback1
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if trial_n == 2:
            nback = 1


        if nback == 2 or trial_n == 1:
            continueRoutine = False
    TextComponent trial_Nback1Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Çöp adamın yürüme hızı bir önceki denemedeki yürüme hızına göre daha hızlı ise ise "H" tuşuna,
        daha yavaş ise "Y" tuşuna, aynı ise "A" tuşuna basınız.
    KeyboardComponent trial_Nback1Resp
      allowedKeys = 'y','h','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_Nback2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if nback == 1 or trial_n < 3:
            continueRoutine = False
    TextComponent trial_Nback2Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Çöp adamın yürüme hızı iki önceki denemedeki yürüme hızına göre daha hızlı ise ise "H" tuşuna,
        daha yavaş ise "Y" tuşuna, aynı ise "A" tuşuna basınız.
    KeyboardComponent trial_Nback2Resp
      allowedKeys = 'y','h','a'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_start
    TextComponent trial_startText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Alıştırma kısmı bitti.

        Test kısmına başlamak için herhangi bir tuşa basınız.
    KeyboardComponent trial_startResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Consent
  Routine Consent2
  Routine Consent3
  Routine instruction
  Routine instruction1b
  Routine instruction2
  Routine instruction3
  Routine practice_text
  LoopInitiator practice_cond loopType="TrialHandler"
    conditionsFile = condition_practice.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [OrderedDict([('speed_p', '50P.mp4'), ('nback_p', 1)]),
      OrderedDict([('speed_p', '63P.mp4'), ('nback_p', 1)]),
      OrderedDict([('speed_p', '100P.mp4'), ('nback_p', 2)]),
      OrderedDict([('speed_p', '50P.mp4'), ('nback_p', 2)])]
    Routine practice_beg
    Routine Practice
    Routine practice_outcome
    Routine practice_Nback1
    Routine practice_Nback2
  LoopTerminator practice_cond
  Routine trial_start
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 2
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    LoopInitiator conditions loopType="TrialHandler"
      conditionsFile = all_conditions2.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('nback', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('nback', 1)])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
      Routine trial_beg
      Routine trial
      Routine sound_2
      Routine test
      Routine trial_Nback1
      Routine trial_Nback2
    LoopTerminator conditions
    Routine Blok_break
  LoopTerminator blocks
  Routine end
