PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Soa_original
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        a = linspace(0,9,90)
        shuffle(a)
        counteksik = 0;
      Begin Routine:
        pressed = False
        pressTime = float("inf")
        automatic = False

        tStart = t



        if w_sound == 1:
            automatic = True

        if counteksik is not 0 and w_sound == 0:
            automatic = True
            counteksik = counteksik - 1
      Each Frame:
        if (key_press.keys == 'space') and not pressed:
            pressed = True
            pressTime = t

        if t > tStart + 9:
            continueRoutine = False
    TextComponent TrialText
      letterHeight = 0.04
      pos = (0,0.4)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = Hazır olduğunuzda istediğiniz herhangi bir an SPACE tuşuna basınız.
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    MovieComponent walking_stickman
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = $Speed
      startVal [time (s)] = 0
      stopVal [condition] = $(pressed and (t > pressTime + delay)) or (automatic and (t > tStart + a[0]))
      units = height
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    KeyboardComponent key_press
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 3
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  Routine instruction
    TextComponent briefing
      letterHeight = 0.050
      startVal [time (s)] = 0.5
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      text:
        Merhaba!
        Bu deneyde sizden her denemede istediginiz herhangi bir an SPACE tuşuna basmanız istenmektedir.


        Tuşa basış bazı denemelerde bir sese sebep olmakta, bazılarında olmamaktadır.
        Bazı denemelerde ise bilgisayar kendiliğinden bu sesi üretmektedir.

        Devam etmek için lütfen herhangi bir tuşa basınız.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instruction3
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Önemli hatırlatma!

        Deney boyunca saymayın, ritim tutmayın
        ve zaman aralıkları ile ilgili size bilgi verebilecek herhangi bir strateji geliştirmeyin.

        Lütfen, deneye başlamak için bilgisayarınızdan ses duyabildiğinize emin olun
        ve bilgisayarınızın sesini 40 olarak ayarlayın.

        Devam etmek için lütfen boşluk tuşuna basın.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if key_press.keys is None and automatic == True:
            continueRoutine = False
      Each Frame:
        if key_press.keys is None and automatic == True:
            continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sese ne kadar sizin tuşa basmanızın sebep olduğunu hissettiniz?
        Aşağıda işaretleyin ve <Enter> tuşuna basınız.
    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ("Hic", "Tamamen")
      pos = (0, -0.25)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5,6,7,8,9)
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    KeyboardComponent ending_slider
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine sound_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        compsound = 0
      Begin Routine:
        if automatic == False and key_press.keys is None :
            continueRoutine = False


        if compsound < 27 and automatic == True and key_press.keys == 'space':
            counteksik = counteksik +1;

        if automatic == True and key_press.keys is None:
            compsound = compsound +1
      Each Frame:
        if key_press.keys is None :
            continueRoutine = False
    SoundComponent sound_1
      sound = beep.wav
      startVal [time (s)] = 0.0
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  Routine trial_beg
    TextComponent begin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        SPACE tuşuna basmaya başlayabileceğinizi belirten yazı çıktıktan sonra
        istediğiniz bir an tuşa basınız.
  Routine Blok_break
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0;
      Begin Routine:
        count = count +1;
        if count == 2:
            continueRoutine = False
      Each Frame:
        if count == 2:
            continueRoutine = False
    TextComponent Break
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1. blok bitti. Isterseniz biraz dinlenin.

        2. bloğa devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent break_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Deney bitti. Katılımınız için teşekkürler!
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  Routine instruction1b
    TextComponent instruction_b
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Her denemede ekranda yürüyen bir çöp adam belirecek.
        Bunun sesin oluşmasıyla herhangi bir sebepsel ilişkisi yoktur.

        Çöp adam ekranda olduğu sürece ona bakmanız gerekmektedir.

        Devam etmek için herhangi bir tuşa basınız.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instruction2
    TextComponent briefing2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sizden istenen, deneme bittikten sonra denemede geçen süreyi klavyedeki 'b' tuşu ile üretmeniz ve
        ayrıca deneme sonunda oluşan sese ne kadar sizin SPACE tuşuna basmanızın sebep olduğunu değerlendirmektir.

        Her denemede göreceğiniz çöp adamın ekranda kalmasını hedef süre olarak
        düşünmenizi isteyeceğiz ve bu süreyi mümkün olduğunca doğru bir şekilde yeniden
        üretmenizi bekleyeceğiz.

        Devam etmek için lütfen herhangi bir tuşa basınız.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reproduction_text
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if Reproduction == 0:
            continueRoutine = False
      Each Frame:
        if Reproduction == 0:
            continueRoutine = False
    TextComponent repro_ReelText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lütfen çöp adam ekrandayken geçen süreyi mümkün olduğunca doğru bir şekilde yeniden üretiniz.

        Üretimi başlatmak için "b" tuşuna basın ve
        hedef sürenin geçtiğini düşündüğünüzde "b" tuşuna
        ikinci kere basın.
    KeyboardComponent repro_ReelResp
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine reproduction_beg
    TextComponent repro_begText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lütfen çöp adam ekrandayken geçen süreyi mümkün olduğunca doğru bir şekilde yeniden üretiniz.

        Üretimi başlatmak için "b" tuşuna basın ve
        hedef sürenin geçtiğini düşündüğünüzde "b" tuşuna
        ikinci kere basın.
    KeyboardComponent repro_begResp
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repro_end
    PolygonComponent repro_square
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent repro_endResp
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice
    TextComponent practiceText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Şimdi zaman üretimi için birkaç alıştırma yapacağız.

        Hazır olduğunuzda başlamak için herhangi bir tuşa basın.
    KeyboardComponent practic_startResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_begText
    TextComponent practice_Text2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        SPACE tuşuna basmaya başlayabileceğinizi belirten yazı çıktıktan sonra
        istediğiniz bir an tuşa basınız.
  Routine practice_target
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        pressed = False
        pressTime = float("inf")

        tStart = t
      Each Frame:
        if (practice_targetResp.keys == 'space') and not pressed:
            pressed = True
            pressTime = t

        if t >tStart + 9:
            continuneRoutine = False
    TextComponent practice_eachtext
      letterHeight = 0.04
      pos = (0,0.4)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text = Hazır olduğunuzda istediğiniz herhangi bir an SPACE tuşuna basınız.
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    MovieComponent practice_temp
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $speed_p
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_targetResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine practice_outcome
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if practice_targetResp.keys is None:
            continueRoutine = False
      Each Frame:
        if practice_targetResp.keys is None:
            continueRoutine = False
    SoundComponent practice_sound
      sound = beep.wav
      startVal [time (s)] = 0.0
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  Routine repro_begReel
  Routine repro_Reel
  Routine reel_start
    TextComponent reel_startText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Alıştırma kısım bitti. Şimdi test kısmına geçiyoruz.

        Hazır olduğunuzda herhangi bir tuşa basınız.
    KeyboardComponent reel_startResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repro_Reel_2
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        if Reproduction == 0:
            continueRoutine = False
      Each Frame:
        if Reproduction == 0:
            continueRoutine = False
    PolygonComponent repro_ReelStim
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent repro_reelEnd
      allowedKeys = 'b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent
    TextComponent Consent_form
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        AYDINLATILMIŞ ONAM FORMU

        Koç Üniversitesi Psikoloji Bölümü öğretim üyesi Prof. Dr. Fuat Balcı yönetiminde yüksek lisans
        öğrencisi Merve Erdoğan tarafından aksiyon alma hissi konusunda yürütülen araştırmaya katılımınız rica olunmaktadır. Bu çalışmada katılımınız tamamen gönüllülük esasına dayanır.

        ÇALIŞMANIN ADI: Aksiyon Alma Hissinde Zaman Etkisi

        ÇALIŞMANIN AMACI
        Koç Üniversitesi tarafından yürütülen bu çalışmanın amacı, aksiyon alma hissini kontrol
        eden bilişsel mekanizmayı araştırmaktır.

        PROSEDÜRLER
        Bu çalışmaya gönüllü katılmak istemeniz halinde yürütülecek çalışmalar şöyledir;
        Yaklaşık yarım saatlik bilgisayar üzerinde yapılacak olan bir davranış deneyine katılmanız
        beklenmektedir. Bu çalışmada sizden bir tuşa basmanız ve sonrasında oluşan sese sizin sebep olup olmadığınızı değerlendirmeniz istenmektedir.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent Consent_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent2
    TextComponent Consent_text2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        OLASI RİSKLER VE RAHATSIZLIKLAR
        Deneyin risk ya da rahatsızlığı yoktur.

        TOPLUMA VE/VEYA DENEKLERE OLASI FAYDALARI
        Bu çalışmanın amacı aksiyon alma hissini kontrol eden bilişsel mekanizmayı ve etkileyen faktörleri
        araştırmaktır. Çalışmanın sonuçları, bu mekanizma hakkında topluma bilgi sağlayacaktır.

        GİZLİLİK
        Bu çalışmayla bağlantılı olarak elde edilen ve sizinle özdeşleşmiş her bilgi gizli kalacak, kişilerle
        paylaşılmayacak ve yalnızca sizin izniniz veya kanunun gerektirdiği ölçüde ifşa edilecektir. Gizlilik
        tanımlanmış bir kodlama prosedürüyle sağlanacak ve kod çözümüne erişim yalnızca çalışmanın
        sorumlusu araştırmacıyla sınırlı kalacaktır. Tüm veriler, sınırlı erişime sahip güvenli ve şifreli bir
        veri tabanında tutulacaktır.

        Onam formunun devamı için herhangi bir tuşa basınız.
    KeyboardComponent Consent_resp2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Consent3
    TextComponent Consent_text3
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        KATILIM VE AYRILMA
        Bu çalışmanın içinde olmak isteyip istemediğinize tamamı ile bağımsız ve etki altında kalmadan
        karar verebilirsiniz. Bu çalışmaya gönüllü olarak katılmaya karar vermeniz halinde dahi, sahip
        olduğunuz herhangi bir hakkı kaybetmeden veya herhangi bir cezaya maruz kalmadan istediğiniz
        zaman çekilebilirsiniz. Çalışmadan çekilmek isterseniz bir cezası yoktur ve sahip olduğunuz
        faydaları kaybetmezsiniz.

        ARAŞTIRMACILARIN KİMLİĞİ
        Bu araştırma ile ilgili herhangi bir sorunuz veya endişeniz varsa, lütfen iletişime geçiniz:
        Prof. Dr. Fuat Balcı
        Koç Üniversitesi
        T: 0212 338 1138
        E: fbalci@ku.edu.tr
        Merve Erdoğan
        Koç Üniversitesi
        E: merdogan19@ku.edu.tr

        Yukarıda açıklanan prosedürleri anladım. Sorularım tatmin olacağım şekilde yanıtlandı ve dilediğim
        zaman ayrılma hakkım saklı kalmak koşulu ile bu çalışmaya katılmayı onaylıyorum diyorsanız ‘e’ tuşuna, deneyden çekilmek için ‘h’ tuşuna basınız.
    KeyboardComponent Consent_resp3
      allowedKeys = 'e','h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Consent
  Routine Consent2
  Routine Consent3
  Routine instruction
  Routine instruction1b
  Routine instruction2
  Routine instruction3
  Routine practice
  LoopInitiator practice_cond loopType="TrialHandler"
    conditionsFile = condition_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('speed_p', '50fps.mp4')]),
      OrderedDict([('speed_p', '63fps.mp4')]),
      OrderedDict([('speed_p', '100fps.mp4')])]
    Routine practice_begText
    Routine practice_target
    Routine practice_outcome
    Routine reproduction_beg
    Routine repro_end
  LoopTerminator practice_cond
  Routine reel_start
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator conditions loopType="TrialHandler"
      conditionsFile = all_conditions2.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.52), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '63fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '100fps.mp4'), ('delay', 0.32), ('w_sound', 0), ('Reproduction', 1)]),
        OrderedDict([('Speed', '50fps.mp4'), ('delay', 0.72), ('w_sound', 0), ('Reproduction', 1)])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
      Routine trial_beg
      Routine trial
      Routine sound_2
      Routine test
      Routine reproduction_text
      Routine repro_Reel_2
    LoopTerminator conditions
    Routine Blok_break
  LoopTerminator blocks
  Routine end
